LineSearcher parameters :=

    ; The image from which the line search will be performed
    image filename :=

    ; The number of objective function evaluations to perform (default: 10)
    number of evaluations := 2000

    ; The interval between the step sizes (alphas) can be either exponential (1) or linear (0) (default: 0)
    use exponential alphas := 1

    ; Control the minimum and maximum of alpha values to compute
    ; `use exponential alphas := 1` then this controls the exponential e.g. 10^(alpha min) to 10^(alpha max)
    alpha min := -10  ; default: 0.0
    alpha max := -2   ; default: 1.0

    ; Apply a lower threshold to every voxel in the computed images (default: 0.0)
    line search image lower bound := 0.0

    ; Objective function configuration
    objective function type := PoissonLogLikelihoodWithLinearModelForMeanAndProjData
    PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

        ; Measured sinogram data filename
        input file :=

        ; Additive sinogram data filename
        additive_sinogram :=

        projector pair type := Matrix
        projector pair using matrix parameters :=
            matrix type := Ray Tracing
            ray tracing matrix parameters :=
                disable caching := 0
                store only basic bins in cache := 1
                restrict to cylindrical fov := 0
                number of rays in tangential direction to trace for each bin := 50
                use actual detector boundaries := 1
                do symmetry 90degrees min phi := 0
                do symmetry 180degrees min phi := 0
                do symmetry swap segment := 1
                do symmetry swap s := 1
                do symmetry shift z := 1
            end ray tracing matrix parameters :=
        end projector pair using matrix parameters :=

        ; Prior configuration
        prior type := Quadratic
        Quadratic Prior Parameters:=
            penalisation factor := 0.0
            only 2D:= 0
            ;kappa filename:= 
            gamma value := 2
        END Quadratic Prior Parameters:=

    end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=
End :=

