OSMAPOSLParameters :=

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := ../../recon_test_pack/SPECT/SPECTUB/input.hs
projector pair type := SPECTGPU
              Projector Pair Using SPECTGPU Parameters :=
                  ; width of PSF

                  ;PSF type of correction {  3D  }
                  ;
                  ; These values are mostly dependent on your collimator.
                  ; the PSF is modelled as a Gaussian with sigma dependent on the distance from the collimator
                  ; sigma_at_depth = collimator_slope * depth_in_cm + collimator sigma 0(cm)
                  collimator slope := 0.0163
                  collimator sigma 0(cm) := 0.1466
                  number of PSF sigmas := 2 ; default 2 (95% of the PSF)


                  attenuation image filename := ../../recon_test_pack/SPECT/SPECTUB/attMapRec.hv

         End Projector Pair Using SPECTGPU Parameters :=

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

initial estimate := ../../recon_test_pack/SPECT/SPECTUB/init.hv
output filename prefix := my_SPECTGPU_image

number of subsets:= 4
number of subiterations:= 16
save estimates at subiteration intervals:= 4




END :=
