OSMAPOSLParameters :=

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := ../../recon_test_pack/SPECT/SPECTUB/input.hs

projector pair type := Matrix
  Projector Pair Using Matrix Parameters :=
    Matrix type := SPECT UB
    Projection Matrix By Bin SPECT UB Parameters:=

        maximum number of sigmas:= 2.0

        ;PSF type of correction { 2D // 3D // Geometrical }
        psf type:= 3D
        ; next 2 parameters define the PSF. They are ignored if psf_type is "Geometrical"
        ; the PSF is modelled as a Gaussian with sigma dependent on the distance from the collimator
        ; sigma_at_depth = collimator_slope * depth_in_cm + collimator sigma 0(cm)
        collimator slope := 0.0163
        collimator sigma 0(cm) := 0.1466

        ;Attenuation correction { Simple // Full // No }
        attenuation type := Simple
        ;Values in attenuation map in cm-1
        attenuation map := ../../recon_test_pack/SPECT/SPECTUB/attMapRec.hv

        ; if next variable is set to 0, only a single view is kept in memory
        keep all views in cache := 0

    End Projection Matrix By Bin SPECT UB Parameters:=

  End Projector Pair Using Matrix Parameters :=

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

initial estimate := ../../recon_test_pack/SPECT/SPECTUB/init.hv
output filename prefix := my_SPECTUB_image

number of subsets:= 4
number of subiterations:= 16
save estimates at subiteration intervals:= 4




END :=
