OSMAPOSLParameters :=
  ; sample .par file to use OSEM on SPECT data. 
  ; Any of the algorithm parameters illustrated for PET (such as filtering, prior etc)
  ; will work for SPECT as well, as would OSSPS.
  ; The only thing different here is the projector.

  objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
    
  PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

    input file := peak.hs

    projector pair type := SPECTGPU
      Projector Pair Using SPECTGPU Parameters :=
            ; width of PSF

            ;PSF type of correction {  3D  }
            ; next 2 parameters define the PSF.
            ; These values are mostly dependent on your collimator.
            ; If you want a 2D PSF you can set collimator sigma 0(cm) to 0
            ; the PSF is modelled as a Gaussian with sigma dependent on the distance from the collimator
            ; sigma_at_depth = collimator_slope * depth_in_cm + collimator sigma 0(cm)
            collimator slope := 0.0163
            collimator sigma 0(cm) := 0.1466
            number of PSF sigmas := 3 ; default 2 (95% of the PSF)

            attenuation image filename := umap_zoomed.hv

     End Projector Pair Using SPECTGPU Parameters :=
  subset sensitivity filenames := sens_subset{}
  recompute sensitivity := 1
  z zoom := 0.5
  xy output image size (in pixels) := 128
  z output image size (in pixels) := 128
  end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

  ; best to specifiy an initial image (e.g. filled with 1) for sizes
  ; or see OSMAPOSL_osem_with_interfiltering.par and FBP2D_SPECT.par for some keywords 
  ;initial estimate:= init.hv
  output filename prefix := outgpu

  ; needs to be a divisor of the number of views
  number of subsets:= 8
  number of subiterations:= 16
  Save estimates at subiteration intervals:= 8

END :=
