 projector pair parameters:=
   projector pair type := SPECTGPU
     Projector Pair Using SPECTGPU Parameters :=
                  ; width of PSF

                  ;PSF type of correction {  3D  }
                  ;
                  ; These values are mostly dependent on your collimator.
                  ; the PSF is modelled as a Gaussian with sigma dependent on the distance from the collimator
                  ; sigma_at_depth = collimator_slope * depth_in_cm + collimator sigma 0(cm)
                  ;collimator slope := 0.0163
                  ;collimator sigma 0(cm) := 0.1466
                  ;number of PSF sigmas := 2 ; default 2 (95% of the PSF)


                  ;attenuation image filename := ${CMAKE_SOURCE_DIR}/recon_test_pack/SPECT/SPECTUB/attMapRec.hv

         End Projector Pair Using SPECTGPU Parameters :=
End projector pair parameters:=   
