OSMAPOSLParameters :=
; test file for OSMAPOSL with a quadratic prior (and ray tracing projection matrix)
objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := my_prompts${suffix}.hs
zero end planes of segment 0:= 0 ; segment 0 is has direct and indirect planes
; if disabled, defaults to maximum segment number in the file
;maximum absolute segment number to process := 3

projector pair type := parallelproj
  Projector Pair Using Parallelproj Parameters:=
  End Projector Pair Using Parallelproj Parameters:=

  Bin Normalisation type := from projdata
    Bin Normalisation From ProjData :=
    normalisation projdata filename:= my_acfs${suffix}.hs
    End Bin Normalisation From ProjData:=

additive sinogram := my_additive_sinogram${suffix}.hs

xy output image size (in pixels) := 91
zoom := .5

use subset sensitivities:=1
subset sensitivity filenames:= my_test_sim${suffix}_sens_PP_s${num_subsets}_%d.hv
recompute_sensitivity:=1

prior type := Relative Difference Prior
  Relative Difference Prior Parameters:=
  penalisation factor := 0.5
  ; next defaults to 0, set to 1 for 2D inverse Euclidean weights, 0 for 3D 
  only 2D:= 0
  END Relative Difference Prior Parameters:=

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

output filename prefix := my_test_sim${suffix}_image_OSMAPOSL_PP_CUDARDP
number of subsets:= ${num_subsets}
start at subset:= 0
number of subiterations:= 28
save estimates at subiteration intervals:= ${num_subsets}

;report objective function values interval := 1

END :=
