KOSMAPOSLParameters :=

disable output := 1
hybrid := 0
sigma_m := 1
;sigma_p := 1  ; don't care, hybrid is false
sigma_dm := 1
;sigma_dp := 1  ; don't care, hybrid is false	
number of neighbours := 1
number of non-zero feature elements := 1
; since nu
anatomical image filenames := {RPTsens_seg4.hv}

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := Utahscat600k_ca_seg4.hs
; if disabled, defaults to maximum segment number in the file
maximum absolute segment number to process := 4
zero end planes of segment 0:= 1

projector pair type := Separate Projectors
 projector pair using separate projectors parameters :=
 forward projector type := Ray Tracing
 forward projector using ray tracing parameters :=
 end forward projector using ray tracing parameters := 
 back projector type := Interpolation
 back projector using interpolation parameters :=
 end back projector using interpolation parameters := 
end projector pair using separate projectors parameters := 

;Bin Normalisation type:=None
; change to STIR 2.x default for compatibility 
use subset sensitivities:=0
; if the next parameter is disabled, 
; it default to an image full of 1s.
; this will be wrong however
sensitivity filename:= RPTsens_seg4.hv

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

kernelised output filename prefix := my_test_image_k0
; if the next parameter is disabled, 
; it default to an image full of 1s.
; this funny value is just for testing if you can read an initial image
initial estimate:= RPTsens_seg4.hv
enforce initial positivity condition:=0

number of subsets:= 12
start at subset:= 1
number of subiterations:= 5
start at subiteration number:=2
save estimates at subiteration intervals:= 3


inter-update filter subiteration interval:= 4
inter-update filter type := Separable Cartesian Metz
Separable Cartesian Metz Filter Parameters :=
x-dir filter FWHM (in mm):= 5
y-dir filter FWHM (in mm):= 5
z-dir filter FWHM (in mm):= 8
x-dir filter Metz power:= 1.0
y-dir filter Metz power:= 1.0
z-dir filter Metz power:=1.0
x-dir maximum kernel size := 129
y-dir maximum kernel size := 129
z-dir maximum kernel size := 31
END Separable Cartesian Metz Filter Parameters :=

inter-iteration filter subiteration interval:= 4
inter-iteration filter type := Separable Cartesian Metz
Separable Cartesian Metz Filter Parameters :=
x-dir filter FWHM (in mm):= 6.0
y-dir filter FWHM (in mm):= 6.0
z-dir filter FWHM (in mm):= 6.0
x-dir filter Metz power:= 2.0
y-dir filter Metz power:= 2.0
z-dir filter Metz power:= 2.0
x-dir maximum kernel size := 129
y-dir maximum kernel size := 129
z-dir maximum kernel size := 31
END Separable Cartesian Metz Filter Parameters :=



END :=
