OSMAPOSLParameters :=

input file := Utahscat600k_ca_seg4.hs
output filename prefix := my_test_image
xy output image size (in pixels) := 97

; if disabled, defaults to maximum segment number in the file
maximum absolute segment number to process := 4

; if the next two parameters are disabled, 
; defaults are to images full of 1s.
; this funny default is just for testing if you can read an initial image
;initial image:= RPTsens_seg4.hv
sensitivity image:= my_RPTsens_seg4.hv

number of subsets:= 12
start at subset:= 1
number of subiterations:= 5
save images at subiteration intervals:= 3

zero end planes of segment 0:= 1

inter-update filter subiteration interval:= 4
inter-update filter type := Separable Cartesian Metz
Separable Cartesian Metz Filter Parameters :=
x-dir filter FWHM (in mm):= 5
y-dir filter FWHM (in mm):= 5
z-dir filter FWHM (in mm):= 8
x-dir filter Metz power:= 1.0
y-dir filter Metz power:= 1.0
z-dir filter Metz power:=1.0
x-dir maximum kernel size := 129
y-dir maximum kernel size := 129
z-dir maximum kernel size := 31
END Separable Cartesian Metz Filter Parameters :=

inter-iteration filter subiteration interval:= 4
inter-iteration filter type := Separable Cartesian Metz
Separable Cartesian Metz Filter Parameters :=
x-dir filter FWHM (in mm):= 6.0
y-dir filter FWHM (in mm):= 6.0
z-dir filter FWHM (in mm):= 6.0
x-dir filter Metz power:= 2.0
y-dir filter Metz power:= 2.0
z-dir filter Metz power:= 2.0
x-dir maximum kernel size := 129
y-dir maximum kernel size := 129
z-dir maximum kernel size := 31
END Separable Cartesian Metz Filter Parameters :=

start at subiteration number:=2
enforce initial positivity condition:=0


END :=
