OSMAPOSLParameters := 
objective function type:=  PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:= 
	input file := my_sinogram_f1g1d0b0.hs
	maximum absolute segment number to process :=  2
	projector pair type := Matrix
  Projector Pair Using Matrix Parameters :=
  Matrix type := Ray Tracing
  Ray tracing matrix parameters :=
   ; use multiple (almost) parallel LORs for every bin in the sinogram 
   ; to avoid discretisation artefacts
   number of rays in tangential direction to trace for each bin:= 3
   ; you could disable some symmetries if you have enough memory
   ; this would for instance allow you to increase the number of subsets
   ; do_symmetry_90degrees_min_phi:=0
  End Ray tracing matrix parameters :=
  End Projector Pair Using Matrix Parameters :=

; You may download this file separately, from STIR website
       ;Bin Normalisation type := From ProjData
	;   Bin Normalisation From ProjData :=
	 ;    normalisation projdata filename:= total_mult.hs
	 ;End Bin Normalisation From ProjData:=

	recompute sensitivity := 1
	use subset sensitivities:= 0
	sensitivity filename:=  my_sens_t_proj_seg2.hv
	zoom :=  1

additive sinogram := my_MLrandoms_f1.hs
end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:= 
enforce initial positivity condition:=  1
number of subsets:= 1
number of subiterations:= 1
save estimates at subiteration intervals:= 1
output filename prefix := my_output_t_proj_seg2
END := 
