FBP2DParameters :=
output filename prefix := out/FBP
input file := ../SPECTUB/input.hs
Z output image size (in pixels):=64
z zoom:=.5
xy output image size (in pixels) := 128
back projector type := SPECTGPU
      Back projector Using SPECTGPU Parameters :=
          ; Note the following parameters are not relevant for FBP
          ; width of PSF

          ;PSF type of correction {  3D  }
          ;
          ; These values are mostly dependent on your collimator.
          ; the PSF is modelled as a Gaussian with sigma dependent on the distance from the collimator
          ; sigma_at_depth = collimator_slope * depth_in_cm + collimator sigma 0(cm)
          ;collimator slope := 0.0163
          ;collimator sigma 0(cm) := 0.1466
          ;number of PSF sigmas := 2 ; default 2 (95% of the PSF)

          ;attenuation image filename := ../SPECTUB/attMapRec.hv

 End Back projector Using SPECTGPU Parameters :=
end:=
