Reconstruction :=
reconstruction method := OSMAPOSL
OSMAPOSLParameters :=

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=
maximum absolute segment number to process := -1

projector pair type := Matrix
  Projector Pair Using Matrix Parameters :=
  Matrix type := Ray Tracing
  Ray tracing matrix parameters :=
   number of rays in tangential direction to trace for each bin:= 5
  End Ray tracing matrix parameters :=
  End Projector Pair Using Matrix Parameters :=

recompute sensitivity :=1 
zoom := 1
;zoom := 2
;XY output image size (in pixels) := 150
;z output image size (in pixels) := 

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

; initial image := 
enforce initial positivity condition:=1

number of subsets:= 1
number of subiterations:= 1
save estimates at subiteration intervals:= 1

;
; Disable output
;
disable output := 1
End OSMAPOSLParameters:=
End reconstruction :=
