generate_image Parameters :=
output filename:=my_test_object_g1
image duration (sec) := 20
image relative start time (sec) := 0
X output image size (in pixels):=101
Y output image size (in pixels):=101
Z output image size (in pixels):=47
X voxel size (in mm):= 2.397
Y voxel size (in mm):= 2.397
Z voxel size (in mm):= 3.27

  Z number of samples to take per voxel := 1
  Y number of samples to take per voxel := 1
  X number of samples to take per voxel := 1

shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm):=2.3
   radius-y (in mm):=2.3
   length-z (in mm):=2.3
   origin (in mm):={50,0,0}
   END:=
value :=1

next shape:=
shape type:= ellipsoidal cylinder
Ellipsoidal Cylinder Parameters:=
   radius-x (in mm):=60
   radius-y (in mm):=50
   length-z (in mm):=12
   origin (in mm):={80,40,-30}
   END:=
value :=.5

END:=
